proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend_0[162], axon[81]

proc topol() { local i
  connect dend_0(0), soma(0.5)
  for i = 1, 11 connect dend_0[i](0), dend_0[i-1](1)
  for i = 12, 13 connect dend_0[i](0), dend_0[10](1)
  connect dend_0[14](0), dend_0[9](1)
  for i = 15, 16 connect dend_0[i](0), dend_0[14](1)
  connect dend_0[17](0), dend_0[8](1)
  connect dend_0[18](0), dend_0[7](1)
  connect dend_0[19](0), dend_0[6](1)
  connect dend_0[20](0), dend_0[5](1)
  connect dend_0[21](0), dend_0[4](1)
  connect dend_0[22](0), dend_0[3](1)
  for i = 23, 24 connect dend_0[i](0), dend_0[22](1)
  connect dend_0[25](0), dend_0[2](1)
  connect dend_0[26](0), dend_0[1](1)
  for i = 27, 28 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[29](0), dend_0[27](1)
  connect dend_0[30](0), dend_0[26](1)
  connect dend_0[31](0), dend_0(1)
  connect dend_0[32](0), soma(0.5)
  for i = 33, 34 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[35](0), dend_0[33](1)
  for i = 36, 39 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[40](0), dend_0[38](1)
  connect dend_0[41](0), dend_0[37](1)
  connect dend_0[42](0), dend_0[36](1)
  connect dend_0[43](0), dend_0[35](1)
  connect dend_0[44](0), dend_0[32](1)
  for i = 45, 46 connect dend_0[i](0), dend_0[44](1)
  for i = 47, 48 connect dend_0[i](0), dend_0[46](1)
  for i = 49, 51 connect dend_0[i](0), soma(0.5)
  for i = 52, 59 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[60](0), dend_0[58](1)
  connect dend_0[61](0), dend_0[57](1)
  connect dend_0[62](0), dend_0[56](1)
  connect dend_0[63](0), dend_0[55](1)
  for i = 64, 68 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[69](0), dend_0[67](1)
  for i = 70, 71 connect dend_0[i](0), dend_0[69](1)
  connect dend_0[72](0), dend_0[66](1)
  connect dend_0[73](0), dend_0[65](1)
  connect dend_0[74](0), dend_0[64](1)
  connect dend_0[75](0), dend_0[63](1)
  for i = 76, 77 connect dend_0[i](0), dend_0[75](1)
  for i = 78, 79 connect dend_0[i](0), dend_0[77](1)
  connect dend_0[80](0), dend_0[54](1)
  connect dend_0[81](0), dend_0[53](1)
  for i = 82, 83 connect dend_0[i](0), dend_0[81](1)
  connect dend_0[84](0), dend_0[52](1)
  connect dend_0[85](0), dend_0[51](1)
  for i = 86, 87 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[88](0), dend_0[86](1)
  for i = 89, 90 connect dend_0[i](0), dend_0[88](1)
  connect dend_0[91](0), dend_0[85](1)
  for i = 92, 93 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[94](0), dend_0[92](1)
  connect dend_0[95](0), dend_0[91](1)
  connect dend_0[96](0), dend_0[51](0)
  for i = 97, 102 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[103](0), dend_0[101](1)
  for i = 104, 105 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[106](0), dend_0[104](1)
  connect dend_0[107](0), dend_0[103](1)
  for i = 108, 109 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[110](0), dend_0[108](1)
  connect dend_0[111](0), dend_0[107](1)
  connect dend_0[112](0), dend_0[100](1)
  for i = 113, 114 connect dend_0[i](0), dend_0[112](1)
  for i = 115, 116 connect dend_0[i](0), dend_0[114](1)
  for i = 117, 118 connect dend_0[i](0), dend_0[116](1)
  connect dend_0[119](0), dend_0[99](1)
  for i = 120, 121 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[122](0), dend_0[120](1)
  connect dend_0[123](0), dend_0[119](1)
  connect dend_0[124](0), dend_0[98](1)
  for i = 125, 126 connect dend_0[i](0), dend_0[124](1)
  connect dend_0[127](0), dend_0[97](1)
  for i = 128, 132 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[133](0), dend_0[131](1)
  for i = 134, 135 connect dend_0[i](0), dend_0[133](1)
  for i = 136, 137 connect dend_0[i](0), dend_0[135](1)
  for i = 138, 139 connect dend_0[i](0), dend_0[137](1)
  connect dend_0[140](0), dend_0[130](1)
  for i = 141, 142 connect dend_0[i](0), dend_0[129](1)
  connect dend_0[143](0), dend_0[128](1)
  for i = 144, 145 connect dend_0[i](0), dend_0[143](1)
  for i = 146, 147 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[148](0), dend_0[146](1)
  connect dend_0[149](0), dend_0[145](1)
  connect dend_0[150](0), dend_0[127](1)
  for i = 151, 153 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[154](0), dend_0[152](1)
  for i = 155, 157 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[158](0), dend_0[156](1)
  connect dend_0[159](0), dend_0[155](1)
  connect dend_0[160](0), dend_0[154](1)
  connect dend_0[161](0), dend_0[151](1)
  connect axon(0), dend_0[150](1)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), axon[2](1)
  for i = 5, 6 connect axon[i](0), axon[4](1)
  for i = 7, 8 connect axon[i](0), axon[6](1)
  connect axon[9](0), axon[1](1)
  for i = 10, 11 connect axon[i](0), axon[9](1)
  for i = 12, 16 connect axon[i](0), axon[i-1](1)
  connect axon[17](0), axon[15](1)
  connect axon[18](0), axon[14](1)
  connect axon[19](0), axon[13](1)
  connect axon[20](0), axon[12](1)
  connect axon[21](0), axon[11](1)
  connect axon[22](0), axon(1)
  for i = 23, 24 connect axon[i](0), axon[22](1)
  connect axon[25](0), dend_0[96](1)
  connect axon[26](0), soma(0.5)
  for i = 27, 28 connect axon[i](0), axon[26](1)
  for i = 29, 31 connect axon[i](0), axon[i-1](1)
  connect axon[32](0), axon[30](1)
  connect axon[33](0), axon[29](1)
  connect axon[34](0), axon[28](1)
  for i = 35, 38 connect axon[i](0), axon[i-1](1)
  connect axon[39](0), axon[37](1)
  for i = 40, 42 connect axon[i](0), axon[i-1](1)
  connect axon[43](0), axon[41](1)
  connect axon[44](0), axon[40](1)
  connect axon[45](0), axon[39](1)
  for i = 46, 47 connect axon[i](0), axon[45](1)
  connect axon[48](0), axon[36](1)
  connect axon[49](0), axon[35](1)
  for i = 50, 51 connect axon[i](0), axon[49](1)
  for i = 52, 53 connect axon[i](0), axon[51](1)
  connect axon[54](0), axon[34](1)
  for i = 55, 56 connect axon[i](0), axon[54](1)
  for i = 57, 60 connect axon[i](0), axon[i-1](1)
  connect axon[61](0), axon[59](1)
  connect axon[62](0), axon[58](1)
  connect axon[63](0), axon[57](1)
  connect axon[64](0), axon[56](1)
  for i = 65, 66 connect axon[i](0), axon[64](1)
  for i = 67, 68 connect axon[i](0), axon[66](1)
  for i = 69, 70 connect axon[i](0), axon[68](1)
  connect axon[71](0), soma(0.5)
  for i = 72, 74 connect axon[i](0), axon[i-1](1)
  connect axon[75](0), axon[73](1)
  connect axon[76](0), axon[72](1)
  for i = 77, 78 connect axon[i](0), axon[76](1)
  connect axon[79](0), axon[71](1)
  connect axon[80](0), axon[71](0)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(3615.2, 3302.25, 20.5893, 286.204)
	pt3dadd(3758.3, 3302.25, 20.5893, 286.204)
	pt3dadd(3901.4, 3302.25, 20.5893, 286.204)
  }
  dend_0 {pt3dclear()
	pt3dstyle(1, 3758.3, 3302.25, 20.5893)
	pt3dadd(3838.93, 3113.99, 15.7949, 36.0888)
	pt3dadd(3881.25, 3052.58, 15.0333, 36.0888)
	pt3dadd(3918.05, 2999.17, 14.371, 39.8676)
	pt3dadd(3958.31, 2948.49, 14.1996, 41.1744)
	pt3dadd(4002.77, 2901.41, 13.5552, 49.9726)
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  }
}
proc shape3d_2() {
  dend_0[27] {	pt3dadd(3607.5, 2515.5, 12, 29.1272)
	pt3dadd(3581.5, 2496, 12, 29.098)
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  }
}
proc shape3d_3() {
  dend_0[41] {	pt3dadd(3447.59, 1280.34, 21.9034, 25.5658)
	pt3dadd(3462.06, 1251.35, 22.3019, 24.1868)
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  }
}
proc shape3d_4() {
  dend_0[61] {	pt3dadd(5291, 3932.5, 26, 18.3848)
	pt3dadd(5305.62, 3904.88, 26, 18.3848)
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  }
}
proc shape3d_5() {
  dend_0[85] {	pt3dadd(3619.46, 3758.51, 19.3941, 65.3234)
	pt3dadd(3629.04, 3819, 20.549, 49.7552)
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  }
}
proc shape3d_6() {
  dend_0[102] {	pt3dadd(4176.87, 2727.17, 19.1337, 28.8714)
	pt3dadd(4215.95, 2755.25, 20.2937, 44.9008)
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  }
}
proc shape3d_7() {
  dend_0[120] {	pt3dadd(2775.18, 2225.37, 11.5556, 25.6478)
  }
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  }
}
proc shape3d_8() {
  dend_0[146] {	pt3dadd(2001.87, 3572.92, 9.87612, 29.3558)
	pt3dadd(1974.69, 3590.7, 10.0453, 26.3906)
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  }
}
proc shape3d_9() {
  axon[5] {	pt3dadd(3644.18, 4395.72, 12.2683, 22.5796)
	pt3dadd(3695.49, 4403.5, 11.7563, 22.5796)
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  }
}
proc shape3d_10() {
  axon[13] {	pt3dadd(1349, 3411.38, 20, 26)
	pt3dadd(1313, 3406, 21.75, 33.1798)
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  }
}
proc shape3d_11() {
  axon[25] {	pt3dadd(3375.46, 3574.75, 19.5, 36.7696)
	pt3dadd(3380, 3640, 17, 29.0688)
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  }
}
proc shape3d_12() {
  axon[35] {	pt3dadd(2664.72, 3809.31, 23.9568, 33.1074)
	pt3dadd(2615.71, 3767.31, 23.0011, 35.2734)
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  }
}
proc shape3d_13() {
  axon[53] {	pt3dadd(2153.46, 2990.4, 14.7955, 28.3944)
	pt3dadd(2119.95, 2957.91, 14.9332, 42.011)
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  }
}
proc shape3d_14() {
  axon[67] {	pt3dadd(2364.05, 5273.78, 25.5, 28.046)
	pt3dadd(2333.5, 5271.5, 25.6667, 28.046)
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  }
}
proc shape3d_15() {
  axon[78] {	pt3dadd(2554.5, 5986.5, 25, 25.5076)
	pt3dadd(2510.62, 6001.12, 24.8333, 18.3848)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}

objref all, dendritic_0, somatic, axonal
proc subsets() { local i
  objref all, dendritic_0, somatic, axonal
  all = new SectionList()
    soma all.append()
    for i=0, 161 dend_0[i] all.append()
    for i=0, 80 axon[i] all.append()

  dendritic_0 = new SectionList()
    for i=0, 161 dend_0[i] dendritic_0.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 80 axon[i] axonal.append()

}
proc geom() {
  soma {  L = 10  diam = 10  }
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    cm = 0.9
  }
  forsec dendritic_0 {
    insert pas
      g_pas = 5e-005
      e_pas = -70
  }
  forsec somatic {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  forsec axonal {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
}
access soma

celldef()
