
//==============================================================================
// Electrodes


objref electrodeIC
soma electrodeIC = new IClamp(0.5)

electrodeIC.dur = 100
electrodeIC.del=20
electrodeIC.amp=0.02



//==============================================================================
// Vectors for recording time and voltage
objref vecT, vecV, vecVdend0_47, vecVdend2_41, vecVdend11_35 
vecT = new Vector()	// Time vector
vecV = new Vector() // Voltage vector in soma
vecVdend0_47 = new Vector() // Voltage vector in the dendrite
vecVdend2_41 = new Vector() 
vecVdend11_35 = new Vector() 
//==============================================================================
objref g
g = new Graph()
addplot(g,0) // makes graph accessible to both hoc and GUI control
g.size(0,200,-80,40)
g.addvar("soma.v(0.5)",1,1,0.6,0.9,2)// soma
g.addvar("dend[0].v(0.47)",2,1,0.6,0.9,2)//47 microns from soma
g.addvar("dend[2].v(0.41)",3,1,0.6,0.9,2)//47 microns from soma
g.addvar("dend[11].v(0.35)",4,1,0.6,0.9,2)//47 microns from soma


objref shape_syn
shape_syn=new Shape() //
shape_syn.size(-2,140,-15,15)
shape_syn.exec_menu("Shape Plot")

//for i=0, nsyn-1{
//	shape_syn.point_mark(AMPAsyn[i],2,"O",2)
//}

shape_syn.exec_menu("View = plot")

objref sh_all
sh_all=new PlotShape() //shape plot with full morpho, to plot v on shape plot with colormap
sh_all.size(-2,140,-2,2)
sh_all.variable("v") 
fast_flush_list.append(sh_all)
sh_all.exec_menu("Shape Plot")
sh_all.exec_menu("Show Diam")



//==============================================================================
//Simulation control
dt=0.02
tstop=200
v_init=-70
celsius = 33
proc initialize(){
	finitialize(v_init)
	fcurrent()
}


proc integrate(){
	while (t<tstop){
		fadvance()
		}
}


proc go(){
	initialize()
	continuerun(tstop)
	saveresults()
}





//==============================================================================
// Set recording vectors
vecT.record(&t)				// Record t
vecV.record(&soma.v(0.5))   // Record i at soma
vecVdend0_47.record(&dend[0].v(0.47))	// Record v at dendrite
vecVdend2_41.record(&dend[2].v(0.41))
vecVdend11_35.record(&dend[11].v(0.35))


objref outputFile
outputFile=new File()

objref t2Vector, v2Vector, vdVectordend0_47, vdVectordend2_41, vdVectordend11_35
t2Vector=new Vector()
v2Vector=new Vector()
vdVectordend0_47=new Vector()
vdVectordend2_41=new Vector()
vdVectordend11_35=new Vector()

proc save_response() {
	index = vecT.indwhere(">", 1)
	print "index = ", index	

	t2Vector =vecT.c(index)
	v2Vector=vecV.c(index)
	vdVectordend0_47=vecVdend0_47.c(index)
	vdVectordend2_41=vecVdend2_41.c(index)
	vdVectordend11_35=vecVdend11_35.c(index)
	
	outputFile.wopen("v.dat")
	outputFile.printf("%d\n", t2Vector.size())	
	for i=0, t2Vector.size()-1 {
			outputFile.printf("%g %g\n", t2Vector.x(i), v2Vector.x(i))
		}
	outputFile.close()
	
	outputFile.wopen("vdend0.dat")
	outputFile.printf("%d\n", t2Vector.size())	
	for i=0, t2Vector.size()-1 {
			outputFile.printf("%g %g\n", t2Vector.x(i), vdVectordend0_47.x(i))
		}
	outputFile.close()
	
	outputFile.wopen("vdend2.dat")
	outputFile.printf("%d\n", t2Vector.size())	
	for i=0, t2Vector.size()-1 {
			outputFile.printf("%g %g\n", t2Vector.x(i), vdVectordend2_41.x(i))
		}
	outputFile.close()
	
	outputFile.wopen("vdend11.dat")
	outputFile.printf("%d\n", t2Vector.size())	
	for i=0, t2Vector.size()-1 {
			outputFile.printf("%g %g\n", t2Vector.x(i), vdVectordend11_35.x(i))
		}
	outputFile.close()
	
	
	print "Save response to file - Done."	
}


//======================================
// Load Parameter Control panel
load_file("ParameterControl.hoc")