proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon[104], dend[181]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), dend[180](1)
  connect axon[5](0), soma(0.5)
  for i = 6, 7 connect axon[i](0), axon[i-1](1)
  connect axon[8](0), axon[6](1)
  for i = 9, 11 connect axon[i](0), axon[8](1)
  for i = 12, 13 connect axon[i](0), axon[i-1](1)
  connect axon[14](0), axon[12](1)
  connect axon[15](0), axon[11](1)
  for i = 16, 17 connect axon[i](0), axon[15](1)
  connect axon[18](0), axon[5](1)
  for i = 19, 21 connect axon[i](0), axon[i-1](1)
  connect axon[22](0), axon[20](1)
  connect axon[23](0), axon[19](1)
  connect axon[24](0), axon[18](1)
  for i = 25, 31 connect axon[i](0), axon[i-1](1)
  connect axon[32](0), axon[30](1)
  for i = 33, 35 connect axon[i](0), axon[i-1](1)
  connect axon[36](0), axon[34](1)
  connect axon[37](0), axon[33](1)
  connect axon[38](0), axon[32](1)
  for i = 39, 40 connect axon[i](0), axon[38](1)
  connect axon[41](0), axon[29](1)
  connect axon[42](0), axon[28](1)
  connect axon[43](0), axon[27](1)
  connect axon[44](0), axon[26](1)
  connect axon[45](0), axon[25](1)
  for i = 46, 47 connect axon[i](0), axon[45](1)
  connect axon[48](0), axon[24](1)
  for i = 49, 50 connect axon[i](0), axon[48](1)
  for i = 51, 55 connect axon[i](0), axon[i-1](1)
  connect axon[56](0), axon[54](1)
  connect axon[57](0), axon[53](1)
  connect axon[58](0), axon[52](1)
  for i = 59, 60 connect axon[i](0), axon[i-1](1)
  connect axon[61](0), axon[59](1)
  for i = 62, 63 connect axon[i](0), axon[61](1)
  connect axon[64](0), axon[58](1)
  connect axon[65](0), axon[51](1)
  for i = 66, 69 connect axon[i](0), axon[i-1](1)
  connect axon[70](0), axon[68](1)
  connect axon[71](0), axon[67](1)
  for i = 72, 73 connect axon[i](0), axon[71](1)
  connect axon[74](0), axon[66](1)
  for i = 75, 76 connect axon[i](0), axon[i-1](1)
  connect axon[77](0), axon[75](1)
  connect axon[78](0), axon[74](1)
  for i = 79, 80 connect axon[i](0), axon[78](1)
  connect axon[81](0), axon[65](1)
  connect axon[82](0), axon[50](1)
  for i = 83, 85 connect axon[i](0), axon[i-1](1)
  connect axon[86](0), axon[84](1)
  connect axon[87](0), axon[83](1)
  connect axon[88](0), axon[82](1)
  for i = 89, 93 connect axon[i](0), axon[i-1](1)
  connect axon[94](0), axon[92](1)
  connect axon[95](0), axon[91](1)
  connect axon[96](0), axon[90](1)
  connect axon[97](0), axon[89](1)
  connect axon[98](0), axon[88](1)
  for i = 99, 100 connect axon[i](0), axon[98](1)
  connect axon[101](0), dend[179](1)
  for i = 102, 103 connect axon[i](0), axon[101](1)
  connect dend(0), axon[2](1)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 7 connect dend[i](0), dend[4](1)
  connect dend[8](0), dend[1](1)
  for i = 9, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend[10](1)
  connect dend[17](0), dend[9](1)
  for i = 18, 19 connect dend[i](0), dend[8](1)
  connect dend[20](0), dend(1)
  for i = 21, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  connect dend[27](0), dend[23](1)
  connect dend[28](0), dend[22](1)
  connect dend[29](0), dend[21](1)
  connect dend[30](0), dend[20](1)
  connect dend[31](0), axon[1](1)
  for i = 32, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  for i = 37, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  connect dend[41](0), dend[37](1)
  connect dend[42](0), dend[36](1)
  connect dend[43](0), dend[33](1)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect dend[53](0), dend[47](1)
  connect dend[54](0), dend[32](1)
  for i = 55, 57 connect dend[i](0), dend[i-1](1)
  connect dend[58](0), dend[56](1)
  connect dend[59](0), dend[55](1)
  connect dend[60](0), dend[54](1)
  connect dend[61](0), dend[31](1)
  for i = 62, 63 connect dend[i](0), dend[i-1](1)
  connect dend[64](0), dend[62](1)
  connect dend[65](0), dend[61](1)
  connect dend[66](0), axon(0)
  for i = 67, 76 connect dend[i](0), dend[i-1](1)
  connect dend[77](0), dend[75](1)
  connect dend[78](0), dend[74](1)
  connect dend[79](0), dend[73](1)
  for i = 80, 81 connect dend[i](0), dend[79](1)
  connect dend[82](0), dend[72](1)
  connect dend[83](0), dend[71](1)
  for i = 84, 89 connect dend[i](0), dend[i-1](1)
  connect dend[90](0), dend[88](1)
  connect dend[91](0), dend[87](1)
  connect dend[92](0), dend[86](1)
  connect dend[93](0), dend[85](1)
  connect dend[94](0), dend[84](1)
  for i = 95, 96 connect dend[i](0), dend[i-1](1)
  connect dend[97](0), dend[95](1)
  for i = 98, 99 connect dend[i](0), dend[97](1)
  connect dend[100](0), dend[94](1)
  for i = 101, 102 connect dend[i](0), dend[100](1)
  connect dend[103](0), dend[83](1)
  connect dend[104](0), dend[70](1)
  connect dend[105](0), dend[69](1)
  for i = 106, 107 connect dend[i](0), dend[105](1)
  connect dend[108](0), dend[68](1)
  connect dend[109](0), dend[67](1)
  connect dend[110](0), dend[66](1)
  for i = 111, 112 connect dend[i](0), dend[i-1](1)
  connect dend[113](0), dend[111](1)
  for i = 114, 115 connect dend[i](0), dend[113](1)
  connect dend[116](0), dend[110](1)
  for i = 117, 121 connect dend[i](0), dend[i-1](1)
  for i = 122, 123 connect dend[i](0), dend[120](1)
  connect dend[124](0), dend[119](1)
  connect dend[125](0), dend[118](1)
  connect dend[126](0), dend[117](1)
  connect dend[127](0), soma(0.5)
  connect dend[128](0), dend[127](0)
  connect dend[129](0), soma(0.5)
  for i = 130, 140 connect dend[i](0), dend[i-1](1)
  connect dend[141](0), dend[139](1)
  connect dend[142](0), dend[138](1)
  connect dend[143](0), dend[137](1)
  for i = 144, 145 connect dend[i](0), dend[143](1)
  for i = 146, 147 connect dend[i](0), dend[136](1)
  connect dend[148](0), dend[135](1)
  connect dend[149](0), dend[134](1)
  connect dend[150](0), dend[133](1)
  connect dend[151](0), dend[132](1)
  connect dend[152](0), dend[131](1)
  connect dend[153](0), dend[130](1)
  for i = 154, 155 connect dend[i](0), dend[i-1](1)
  connect dend[156](0), dend[154](1)
  connect dend[157](0), dend[153](1)
  connect dend[158](0), dend[129](1)
  for i = 159, 160 connect dend[i](0), dend[i-1](1)
  connect dend[161](0), dend[159](1)
  connect dend[162](0), dend[158](1)
  connect dend[163](0), soma(0.5)
  for i = 164, 165 connect dend[i](0), dend[i-1](1)
  connect dend[166](0), dend[164](1)
  for i = 167, 169 connect dend[i](0), dend[i-1](1)
  connect dend[170](0), dend[168](1)
  connect dend[171](0), dend[167](1)
  for i = 172, 173 connect dend[i](0), dend[171](1)
  connect dend[174](0), dend[166](1)
  for i = 175, 176 connect dend[i](0), dend[174](1)
  connect dend[177](0), dend[163](1)
  for i = 178, 179 connect dend[i](0), dend[177](1)
  connect dend[180](0), dend[116](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(83.8434, 74.9028, 21.2859, 7.98114)
	pt3dadd(87.834, 74.9028, 21.2859, 7.98114)
	pt3dadd(91.8246, 74.9028, 21.2859, 7.98114)
  }
  axon {pt3dclear()
	pt3dadd(84.4551, 75.7934, 20.992, 0.598146)
	pt3dadd(81.4565, 76.2474, 20.3125, 0.598146)
  }
  axon[1] {pt3dclear()
	pt3dadd(81.4565, 76.2474, 20.3125, 0.598146)
	pt3dadd(80.55, 76.2, 19.5, 0.9)
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  }
}
proc shape3d_2() {
  dend[18] {	pt3dadd(68.55, 86.1, 16.8333, 0.706916)
	pt3dadd(67.5, 85.8, 16.6667, 0.671278)
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  }
}
proc shape3d_3() {
  dend[40] {	pt3dadd(98.806, 49.2911, 13.9659, 0.617406)
  }
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  }
}
proc shape3d_4() {
  dend[59] {	pt3dadd(61.2979, 64.1997, 13.76, 0.495254)
	pt3dadd(60.6903, 63.7647, 13.335, 0.637714)
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  }
}
proc shape3d_5() {
  dend[89] {	pt3dadd(133.387, 112.168, 29.5538, 0.706562)
	pt3dadd(134.08, 112.418, 30.4916, 0.607982)
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  }
}
proc shape3d_6() {
  dend[111] {	pt3dadd(107.256, 89.1347, 25.1384, 0.786946)
  }
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  }
}
proc shape3d_7() {
  axon[5] {	pt3dadd(91.8415, 81.3299, 24.6758, 0.418694)
	pt3dadd(92.2086, 81.9832, 24.8762, 0.418694)
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  }
}
proc shape3d_8() {
  axon[22] {  }
  axon[23] {pt3dclear()
	pt3dadd(94.9492, 107.422, 22.3001, 0.71269)
	pt3dadd(95.5852, 106.93, 23.3545, 0.563742)
	pt3dadd(96.3155, 106.789, 23.9953, 0.563742)
	pt3dadd(97.3306, 106.35, 25.248, 0.853252)
	pt3dadd(98.6158, 104.874, 27.7295, 1.1132)
  }
  axon[24] {pt3dclear()
	pt3dadd(90.9738, 105.778, 21.2191, 1.09539)
	pt3dadd(90.3037, 106.724, 21.9309, 0.55857)
	pt3dadd(89.4022, 107.728, 22.1971, 0.55857)
	pt3dadd(88.9474, 108.321, 21.7806, 0.574298)
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  }
}
proc shape3d_9() {
  axon[41] {	pt3dadd(54.8912, 69.8719, 27.5685, 0.815616)
	pt3dadd(54.9027, 68.7571, 27.7102, 0.794438)
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  }
}
proc shape3d_10() {
  axon[60] {	pt3dadd(55.9251, 123.986, 23.7041, 0.568646)
	pt3dadd(55.6055, 123.313, 24.2328, 0.568646)
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  }
}
proc shape3d_11() {
  axon[73] {  }
  axon[74] {pt3dclear()
	pt3dadd(65.4752, 129.696, 30.7887, 0.487266)
	pt3dadd(64.7874, 129.595, 29.7181, 1.22146)
	pt3dadd(63.7535, 129.559, 28.3642, 1.08507)
	pt3dadd(62.9287, 130.293, 27.9815, 0.75292)
	pt3dadd(62.2735, 130.645, 27.3378, 1.05945)
	pt3dadd(61.1944, 130.894, 27.3369, 1.02431)
  }
  axon[75] {pt3dclear()
	pt3dadd(61.1944, 130.894, 27.3369, 1.02431)
	pt3dadd(59.7061, 130.854, 27.6288, 1.14332)
	pt3dadd(58.2402, 130.548, 27.9235, 1.05492)
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  }
}
proc shape3d_12() {
  axon[91] {	pt3dadd(44.2166, 86.8892, 13.9684, 0.936734)
	pt3dadd(43.2454, 86.3282, 13.3907, 0.805882)
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  }
}
proc shape3d_13() {
  axon[99] {	pt3dadd(72.8168, 61.696, 30.1117, 0.616986)
	pt3dadd(73.237, 61.076, 29.856, 0.711496)
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  }
}
proc shape3d_14() {
  dend[150] {	pt3dadd(106.991, 45.4759, 7.40565, 0.642248)
	pt3dadd(107.713, 45.6795, 7.36822, 0.639008)
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  }
}
proc shape3d_15() {
  dend[168] {	pt3dadd(72.3837, 25.2532, 20.7273, 0.61423)
	pt3dadd(72.2473, 24.5161, 20.8724, 0.61423)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 103 axon[i] all.append()
    for i=0, 180 dend[i] all.append()
    

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 103 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 179 dend[i] basal.append()

}

proc geom() {
  forsec somatic {  }
   soma.L = 10
   soma.diam = 10
}

proc geom_nseg() {
	forall{nseg=L/10+1}
	
}
proc biophys() {
    forsec all {
    celsius =35
    Ra = 150
    cm = 1
    insert pas
    g_pas = 0.00005
    e_pas = -65
  }
  
  gnabar=0.04            	/* sodium conductance */
  gka = 0.036    			/* A-type potassium density */
  gkdr = 0.036              /* delayed rectifier density */
  
  forall{
	insert nap  gbar_nap=0.0
    insert kdr  gkdrbar_kdr=0.5*gkdr
    insert kap  gkabar_kap=1.0*gka
  }
  
  forsec somatic {
	insert nax
	gbar_nax=1.00*gnabar
	gkdrbar_kdr=1.0*gkdr
    gkabar_kap=1.0*gka
  }
  
  forsec basal {
    insert pas
      g_pas = 0.00005
      e_pas = -65
	  //insert cal cai=4e-5 cao= 2 gcalbar_cal =0.002 // L-type VGCC
	  //insert it2  cai=4e-5 cao= 2 eca= 100 shift_it2 = 0 gcabar_it2 = 0.0000055 qm_it2 = 2.5 qh_it2 = 2.5 // T-type VGCC
	  //insert IA gkAbar_IA = 0.0165
  }
  
  forsec axonal{
	insert pas
    g_pas = 0.00005
    e_pas = -65	
	insert nax gbar_nax=3.0*gnabar
    gkdrbar_kdr=3.0*gkdr
    gkabar_kap=3.0*gka
  }
  
  forall {
        ek = -89.0
        ena = 45.0
    }
}
access soma

celldef()

